PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant_id'],expName,expInfo["tf_mapping"],expInfo['date'])
  End Message = Have a Wonderful day!
  Experiment info = {'participant_id': 'f"{randint(0, 999999):06.0f}"', 'tf_mapping': "['TrueFalse', 'FalseTrue']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['experiment_stimuli/chooseBlocksTest.xlsx', 'experiment_stimuli/test6.xlsx', 'experiment_stimuli/test7.xlsx', 'experiment_stimuli/test8.xlsx', 'experiment_stimuli/test9.xlsx', 'experiment_stimuli/Block1.xlsx', 'experiment_stimuli/Block2.xlsx', 'experiment_stimuli/Block3.xlsx', 'experiment_stimuli/Block4.xlsx', 'experiment_stimuli/Block5.xlsx', 'experiment_stimuli/Block6.xlsx', 'experiment_stimuli/Block7.xlsx', 'experiment_stimuli/Block8.xlsx', 'experiment_stimuli/Block9.xlsx', 'experiment_stimuli/Block10.xlsx', 'experiment_stimuli/chooseBlocks.xlsx']
  Save csv file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.9216, 0.9216, 0.9216
  expName = SentenceDecisionTask
  expVersion = v2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Start_Task_Routine
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    CodeComponent setupBrowserScript
      Code Type = Both
      Begin JS Experiment:
        document.addEventListener('contextmenu', function(e) {
            e.preventDefault();
        });

        //disable downloading result to browser
        psychoJS._saveResults = 0;
    CodeComponent mouseMappingScript
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo["tf_mapping"] == 'TrueFalse':
            left = 'True'
            right = 'False'

        else:
            left = 'False'
            right ='True'

        dynamic_text = f"Judge whether each sentence is literally true or false\n\nLeft mouse click = {left}\nRight mouse click = {right}\n\nPress spacebar to begin."
        left_response = f"Left mouse click = {left}"
        right_response = f"Right mouse click = {right}"
    TextComponent InstructionText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $dynamic_text
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    KeyboardComponent StartKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    CodeComponent code
      Code Type = Auto->JS
  Routine Fixation_Cross
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    TextComponent text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      text = +
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    CodeComponent fixationScript
      Code Type = Auto->JS
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      Begin Routine:
        #if blockLoop.thisN == 4 or blockLoop.thisN == 9:
        if blockLoop.thisN == 1 or blockLoop.thisN == 3:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine Midpoint_Break
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    TextComponent Instruction_Break
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the first run of the task.
        Press the 'spacebar' key to resume.
    KeyboardComponent breakKeyPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent breakScript
      Code Type = Auto->JS
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      Begin Routine:
        #if (blockLoop.thisN == 4):
        if (blockLoop.thisN == 1):
            continueRoutine = True
        else:
            continueRoutine = False
  Routine End_Task_Routine
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    TextComponent Instruction_Exit
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the task.

        Thank you for your participation!

        You may now close the experiment. Press the "x' key to exit.
    KeyboardComponent endKeyPress
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endScript
      Code Type = JS
      Begin JS Routine:
        //disable downloading result to browser
        psychoJS._saveResults = 0;

        //create filename for result
        let now = new Date();
        let timestamp = now.getFullYear()+'-'+(now.getMonth()+1)+'-'+now.getDate()+'_'+now.getHours()+'h'+  now.getMinutes() + 'm' + now.getSeconds() + 's';
        let filename = timestamp +'_'+psychoJS._experiment._experimentName+'_'+ expInfo["tf_mapping"]+'_sub'+ expInfo["participant_id"]+'.csv'

        //extract result from experiment
        let dataObj = psychoJS._experiment._trialsData;
        const fields = ['participant_id','Block','correct_answer','Stimuli_Type','Stimuli','One_subsubj_two_subObj','valid_rt','valid_resp','valid_is_correct?','valid_accuracy','valid_mouse_key_resp','RSVP.started','RSVP.stopped','Start_Task_Routine.started','Start_Task_Routine.stopped','early_rt','early_resp','early_mouse_key_resp','early_accuracy','early_is_correct?'];

        // Build datatable
        let data = [
          fields.join(','), // header row
          ...dataObj.map(trial => {
            return fields.map(f => trial[f] !== undefined ? trial[f] : '').join(',');
          })
        ].join('\n');

        //send data to OSF through datapipe platform
        fetch("https://pipe.jspsych.org/api/data/", {
                method: "POST",
                headers: {
                    "Content-Type": "application/json",
                    "Authorization": "*/*"
                },
                body: JSON.stringify({
                    experimentID: 'SnhAIILNiRDu',
                    filename: filename,
                    data: data,
            }),
         }).then(response => response.json()).then(data => {
                console.log(data);
            })
            .catch((err) => {
                console.error("Failed to send trial data:", err);
            });
  Routine RSVP
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    CodeComponent currentWordScript
      Code Type = Auto->JS
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      Begin Routine:
        wordIndex = 0
        nextWordTime = 0
        currentWord = words[wordIndex]
      Each Frame:
        if wordIndex < len(words) - 1:
            if t >= nextWordTime + 0.5:
                wordIndex += 1
                currentWord= words[wordIndex]
                nextWordTime = t
    TextComponent StimuliText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every frame]:
        $currentWord
    TextComponent LeftResponseInstruction
      color = black
      letterHeight = 0.035
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $left_response
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    TextComponent rightResponseInstruction
      color = black
      letterHeight = 0.035
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $right_response
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    MouseComponent earlyMouseClick
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      timeRelativeTo = routine
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    CodeComponent storeEarlyMouseClick
      Code Type = Both
      Begin JS Routine:
        let correct_answer = correct_answer ? "True" : "False";
        clicked = false;
        early_response_time = [];
        early_response = "";
        mouse_response = "";
      Begin Routine:
        clicked = False
        early_response_time=[]
        early_response= ''
        mouse_response =''
      Each Frame:
        buttons = earlyMouseClick.getPressed()
        if not clicked and (buttons[0] or buttons[2]):
            clicked = True
            early_response_time= earlyMouseClick.mouseClock.getTime()
            if buttons[0]:
                early_response = left
                mouse_response = 'left'

            elif buttons[2]:
                early_response = right
                mouse_response = 'right'
      Each JS Frame:
        buttons = earlyMouseClick.getPressed();
        if (((! clicked) && (buttons[0] || buttons[2]))) {
            clicked = true;
            early_response_time = earlyMouseClick.mouseClock.getTime();
            if (buttons[0]) {
                early_response = left;
                mouse_response = "left";
            } else {
                if (buttons[2]) {
                    early_response = right;
                    mouse_response = "right";
                }
            }
        }
      End JS Routine:
        corr_text = ((early_response.toString() === correct_answer.toString()) ? "yes" : ((early_response !== null) ? "no" : null));
        corr = ((early_response.toString() === correct_answer.toString()) ? "1" : ((early_response !== null) ? "0" : null));
        console.log("early_response", early_response);
        console.log("correct_answer2", correct_answer);
        console.log((resp.toString() === correct_answer.toString()));
        console.log("here2");
        trialLoop.addData("early_rt", early_response_time);
        trialLoop.addData("early_resp", early_response);
        trialLoop.addData("early_mouse_key_resp", mouse_response);
        trialLoop.addData("early_is_correct?", corr_text);
        trialLoop.addData("early_accuracy", corr);
      End Routine:
        # Score correctness
        corr_text = 'yes' if str(early_response) == correctStr else 'no' if early_response is not None else None
        corr = '1' if str(early_response) == correctStr else '0' if early_response is not None else None

        print("early_response", early_response)
        print("correct_answer2", correct_answer)
        print(resp == correctStr)
        print('here2')
        # Record data to CSV
        trialLoop.addData('early_rt', early_response_time)
        trialLoop.addData('early_resp', early_response)
        trialLoop.addData('early_mouse_key_resp', mouse_response)
        trialLoop.addData('early_is_correct?', corr_text)
        trialLoop.addData('early_accuracy', corr)
  Routine Word_Setup
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    CodeComponent wordExtractionScript
      Code Type = Auto->JS
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      Begin Routine:
        words = Stimuli.split(' ')
  Routine Particpant_Response
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    MouseComponent validMouseClick
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      timeRelativeTo = routine
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    TextComponent responsefixationCross
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = +
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    CodeComponent storeValidMouseClick
      Code Type = Both
      Begin JS Routine:
        clicked = false;
        response_time = [];
        resp = "";
        responsefixationCross.setColor("black");
        let correctStr = correct_answer ? "True" : "False";
      Begin Routine:
        clicked = False
        response_time =[]
        resp = ''
        responsefixationCross.setColor('black')
      Each Frame:
        buttons = validMouseClick.getPressed()
        if not clicked and (buttons[0] or buttons[2]):
            clicked = True
            response_time = validMouseClick.mouseClock.getTime()
            if buttons[0]:
                resp = left
                mouse_response = 'left'
            elif buttons[2]:
                resp= right
                mouse_response = 'right'
            responsefixationCross.setColor('red')
      Each JS Frame:
        buttons = validMouseClick.getPressed();
        if (((! clicked) && (buttons[0] || buttons[2]))) {
            clicked = true;
            response_time = validMouseClick.mouseClock.getTime();
            if (buttons[0]) {
                resp = left;
                mouse_response = "left";
            } else {
                if (buttons[2]) {
                    resp = right;
                    mouse_response = "right";
                }
            }
            responsefixationCross.setColor("red");
        }
      End JS Routine:
        corr_text = ((resp === correct_answer.toString()) ? "yes" : ((resp !== null) ? "no" : null));
        corr = ((resp === correct_answer.toString()) ? "1" : ((resp !== null) ? "0" : null));
        console.log("resp", resp);
        console.log("correct_answer", correct_answer);
        console.log((resp === correct_answer.toString()));
        console.log("here");
        trialLoop.addData("valid_rt", response_time);
        trialLoop.addData("valid_resp", resp);
        trialLoop.addData("valid_mouse_key_resp", mouse_response);
        trialLoop.addData("valid_is_correct?", corr_text);
        trialLoop.addData("valid_accuracy", corr);
      End Routine:
        # Score correctness
        corr_text = 'yes' if resp == correctStr else 'no' if resp is not None else None
        corr = '1' if resp == correctStr else '0' if resp is not None else None
        print("resp", resp)
        print("correct_answer", correctStr)
        print(resp == correctStr)
        print("here")
        # Record data to CSV
        trialLoop.addData('valid_rt', response_time)
        trialLoop.addData('valid_resp', resp)
        trialLoop.addData('valid_mouse_key_resp', mouse_response)
        trialLoop.addData('valid_is_correct?', corr_text)
        trialLoop.addData('valid_accuracy', corr)
    TextComponent LeftResponseInstruction_2
      color = black
      letterHeight = 0.035
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $left_response
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    TextComponent rightResponseInstruction_2
      color = black
      letterHeight = 0.035
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $right_response
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  Routine responseInstruction
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    TextComponent LeftResponseInstruction_3
      color = black
      letterHeight = 0.035
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Left mouse click = False 
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    TextComponent rightResponseInstruction_3
      color = black
      letterHeight = 0.035
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Right mouse click = True 
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Flow
  Routine Start_Task_Routine
  LoopInitiator blockLoop loopType="TrialHandler"
    conditionsFile = experiment_stimuli/chooseBlocksTest.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'condsFile': 'test6.xlsx'},
      {'condsFile': 'test7.xlsx'},
      {'condsFile': 'test8.xlsx'},
      {'condsFile': 'test9.xlsx'}]
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = $'experiment_stimuli/' + condsFile
      loopType = random
      nReps = 1
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      Routine Word_Setup
      Routine RSVP
      Routine Particpant_Response
    LoopTerminator trialLoop
    Routine Fixation_Cross
    Routine Midpoint_Break
  LoopTerminator blockLoop
  Routine End_Task_Routine
